WorkflowBuilder(Version=2.7.1)
GroupWorkflow "Intialization params"
    SubscribeSubject "Set Level" => #0
    -> PropertyMapping(Value) => #1
    #1, #0 -> IntProperty(Value=2)
    -> BehaviorSubject Level

    SubscribeSubject "Set Difficulty" => #4
    -> PropertyMapping(Value) => #5
    #5, #4 -> DoubleProperty(Value=0.6)
    -> BehaviorSubject Difficulty

    SubscribeSubject "Set Time between" => #8
    -> PropertyMapping(Value) => #9
    #9, #8 -> DoubleProperty(Value=10)
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> BehaviorSubject "Time between"

    SubscribeSubject "Set Time Out" => #13
    -> PropertyMapping(Value) => #14
    #14, #13 -> DoubleProperty(Value=0.15)
    -> BehaviorSubject P2I

    SubscribeSubject "Set reward time" => #17
    -> PropertyMapping(Value) => #18
    #18, #17 -> DoubleProperty(Value=3)
    -> BehaviorSubject "reward time"

    GroupWorkflow Defult
        IntProperty(Value=0)
        -> BehaviorSubject "Set Level"

        DoubleProperty(Value=1)
        -> BehaviorSubject "Set Difficulty"

        DoubleProperty(Value=15)
        -> BehaviorSubject "Set Time between"

        DoubleProperty(Value=1)
        -> BehaviorSubject "Set Time Out"

        DoubleProperty(Value=3)
        -> BehaviorSubject "Set reward time"

    ExternalizedMapping(Value(DisplayName=Level)) => #22
    ExternalizedMapping(Value(DisplayName=Difficulty)) => #23
    ExternalizedMapping(Value(DisplayName="Time Between")) => #24
    ExternalizedMapping(Value(DisplayName=PTI)) => #25
    ExternalizedMapping(Value(DisplayName="reward Time")) => #26
    ExternalizedMapping(Filter(DisplayName="change settings"))
    -> Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #28
    #22, #28 -> IntProperty(Value=2)
    -> MulticastSubject "Set Level"
    #23, #28 -> DoubleProperty(Value=0.6)
    -> MulticastSubject "Set Difficulty"
    #24, #28 -> DoubleProperty(Value=10)
    -> MulticastSubject "Set Time between"
    #25, #28 -> DoubleProperty(Value=0.15)
    -> MulticastSubject "Set Time Out"
    #26, #28 -> DoubleProperty(Value=3)
    -> MulticastSubject "Set reward time"

ExternalizedMapping("Animal ID")
-> GroupWorkflow Files
    ExternalizedMapping(Value(DisplayName="Animal ID")) => #0
    ExternalizedMapping(Value(DisplayName=Path)) => #1
    Bonsai.Windows.Input.KeyDown(Filter=F10, SuppressRepetitions=false) => #2
    #0, #2 -> StringProperty(Value=F107_test)
    -> BehaviorSubject Animal => #4
    #1, #2 -> PropertySource<Bonsai.IO.EnumerateDirectories,System.String>(MemberName=Path, Value="E:\Ben\Omer training") => #5
    #2 -> StringProperty(Value=\) => #6
    #2 -> StringProperty(Value=\) => #7
    #5, #6, #4, #7 -> Zip
    -> Add
    -> BehaviorSubject path
    #5 -> PropertyMapping(Path) => #11
    SubscribeSubject Animal
    -> PropertyMapping(SearchPattern) => #13
    #11, #13 -> GroupWorkflow "Initialize files"
        ExternalizedMapping(Path, SearchPattern)
        -> Bonsai.IO.EnumerateDirectories(Path="E:\Ben\Omer training", SearchPattern=F107_test_1, SearchOption=TopDirectoryOnly)
        -> IsEmpty => #2
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BehaviorSubject "initilaize new exp"
        #2 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> BehaviorSubject "Continue with animal"

        SubscribeSubject "initilaize new exp"
        -> StringProperty(Value="999 - New experiment created")
        -> Delay(DueTime=PT4S) => #9
        SubscribeSubject "start session" => #10
        #9, #10 -> SubscribeWhen
        -> BehaviorSubject init
        -> BehaviorSubject Events
        -> MulticastSubject "User notifications"
        -> Sink
            WorkflowInput Source1
            -> Delay(DueTime=PT5.5S)
            -> StringProperty(Value="Level: ") => #2
            SubscribeSubject Level
            -> Bonsai.Scripting.IronPython.PythonTransform => #4
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value="  Difficulty: ") => #5
            SubscribeSubject Difficulty
            -> Bonsai.Scripting.IronPython.PythonTransform => #7
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value="  P2I: ") => #8
            SubscribeSubject P2I
            -> Bonsai.Scripting.IronPython.PythonTransform => #10
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value=" T_reward: ") => #11
            SubscribeSubject "reward time"
            -> Bonsai.Scripting.IronPython.PythonTransform => #13
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value=" ITI: ") => #14
            SubscribeSubject "Time between"
            -> Divide(Operand=DoubleProperty(Value=10000000))
            -> Bonsai.Scripting.IronPython.PythonTransform => #17
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            #2, #4, #5, #7, #8, #10, #11, #13, #14, #17 -> Zip
            -> Add
            -> MulticastSubject "User notifications"
            -> Sink
                WorkflowInput Source1
                -> Delay(DueTime=PT0.5S)
                -> StringProperty(Value="press F12 to start")
                -> MulticastSubject "User notifications"
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject "Continue with animal" => #16
        SubscribeSubject path => #17
        Timer(DueTime=PT5S, Period=PT0S) => #18
        StringProperty(Value=Settings.csv) => #19
        #17, #19 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #22
        #22, #18 -> Bonsai.IO.CsvReader(FileName="E:\Ben\Omer training\F107_test_1\Settings.csv", ListSeparator=",", ScanPattern="", SkipRows=0)
        -> Disable Last => #24
        #24, #16 -> SubscribeWhen => #25
        #25, #10 -> SubscribeWhen
        -> BehaviorSubject params
        -> GroupWorkflow "loaded settings"(Description="Loads the last settings from an animal")
            WorkflowInput Source1 => #0
            -> Index(Operand=IntProperty(Value=0))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set reward time"
            #0 -> Index(Operand=IntProperty(Value=1))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set Time Out"
            #0 -> Index(Operand=IntProperty(Value=2))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set Time between"
            #0 -> Index(Operand=IntProperty(Value=3))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set Difficulty"
            -> WorkflowOutput
            #0 -> Index(Operand=IntProperty(Value=4))
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(float)
                def process(value):
                  return float(value)
            -> MulticastSubject "Set Level"
        -> Delay(DueTime=PT5S)
        -> Sink
            WorkflowInput Source1
            -> StringProperty(Value="Loaded ") => #1
            SubscribeSubject Animal => #2
            #1, #2 -> Zip
            -> Add
            -> MulticastSubject "User notifications"
            -> Sink
                WorkflowInput Source1
                -> StringProperty(Value="Level: ") => #1
                SubscribeSubject Level
                -> Skip(Count=1)
                -> Bonsai.Scripting.IronPython.PythonTransform => #4
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                StringProperty(Value="  Difficulty: ") => #5
                SubscribeSubject Difficulty
                -> Skip(Count=1)
                -> Bonsai.Scripting.IronPython.PythonTransform => #8
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                StringProperty(Value="  P2I: ") => #9
                SubscribeSubject P2I
                -> Skip(Count=1)
                -> Bonsai.Scripting.IronPython.PythonTransform => #12
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                StringProperty(Value=" T_reward: ") => #13
                SubscribeSubject "reward time"
                -> Skip(Count=1)
                -> Bonsai.Scripting.IronPython.PythonTransform => #16
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                StringProperty(Value=" ITI: ") => #17
                SubscribeSubject "Time between"
                -> Divide(Operand=DoubleProperty(Value=10000000))
                -> Skip(Count=1)
                -> Bonsai.Scripting.IronPython.PythonTransform => #21
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1, #4, #5, #8, #9, #12, #13, #16, #17, #21 -> Zip
                -> Add
                -> MulticastSubject "User notifications"
                -> Sink
                    WorkflowInput Source1
                    -> StringProperty(Value="press F12 to start")
                    -> MulticastSubject "User notifications"
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput

        StringProperty(Value=" ...") => #31
        SubscribeSubject Animal => #32
        SubscribeSubject loadExp
        -> StringProperty(Value="Loading animal ") => #34
        #34, #32, #31 -> Zip
        -> Add
        -> BehaviorSubject "User notifications"

ExternalizedMapping("Water reward time")
-> GroupWorkflow "Inputs outputs"
    ExternalizedMapping(Value(DisplayName=PortName))
    -> PropertySource<Bonsai.Arduino.AnalogInput,System.String>(MemberName=PortName, Value=COM9) => #1
    -> PropertyMapping(PortName) => #2
    ExternalizedMapping("Report lick", "R_alum pin", "R_att pin", "R_non pin", "R_Mot pin", "R_Ctch pin") => #3
    #2, #3 -> GroupWorkflow Inputs
        ExternalizedMapping(Pin(DisplayName="Report lick")) => #0
        ExternalizedMapping(Value(DisplayName=PortName))
        -> PropertySource<Bonsai.Arduino.AnalogInput,System.String>(MemberName=PortName, Value=COM9) => #2
        -> PropertyMapping(PortName) => #3
        #3, #0 -> GroupWorkflow "Lickport report"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.AnalogInput(PortName=COM9, Pin=9)
            -> GreaterThan(Operand=IntProperty(Value=380))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PublishSubject licked
            -> WorkflowOutput

            Disable ExternalizedMapping(PortName, Pin)
            -> Disable Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=9)
            -> Disable PublishSubject licked
            -> Disable WorkflowOutput
        -> StringProperty(Value=Lick)
        -> BehaviorSubject "lick report"
        #2 -> PropertyMapping(PortName) => #7
        ExternalizedMapping(Pin(DisplayName="R_alum pin")) => #8
        #7, #8 -> GroupWorkflow "report alum"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=17)
            -> WorkflowOutput
        -> PublishSubject "Report aluminum"
        #2 -> PropertyMapping(PortName) => #11
        ExternalizedMapping(Pin(DisplayName="R_att pin")) => #12
        #11, #12 -> GroupWorkflow "report attenuated"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=18)
            -> WorkflowOutput
        -> PublishSubject "Report attenuated"
        #2 -> PropertyMapping(PortName) => #15
        ExternalizedMapping(Pin(DisplayName="R_non pin")) => #16
        #15, #16 -> GroupWorkflow "report no Object"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=19)
            -> WorkflowOutput
        -> PublishSubject "Report non"
        #2 -> PropertyMapping(PortName) => #19
        ExternalizedMapping(Pin(DisplayName="R_Mot pin")) => #20
        #19, #20 -> GroupWorkflow "Report finished M"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=22)
            -> WorkflowOutput
        -> PublishSubject "Motor Report"
        #2 -> PropertyMapping(PortName) => #23
        ExternalizedMapping(Pin(DisplayName="R_Ctch pin")) => #24
        #23, #24 -> GroupWorkflow "Report catch movement"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=20)
            -> WorkflowOutput
        -> PublishSubject "Catch report"
        #2 -> PropertyMapping(PortName) => #27
        ExternalizedMapping(Pin(DisplayName="reset Pin")) => #28
        #27, #28 -> GroupWorkflow "Report reset"
            ExternalizedMapping(PortName, Pin)
            -> Bonsai.Arduino.DigitalInput(PortName=COM9, Pin=3)

            Bonsai.IO.SerialStringRead(PortName=COM15, NewLine=\r\n)
            -> Equal(Operand=StringProperty(Value=stopped))
            -> WorkflowOutput
        -> PublishSubject "reset report"
    #1 -> PropertyMapping(PortName) => #5
    ExternalizedMapping("Aluminum pin", "Attenuated pin", "No object pin", "Motor pin", "Catch pin", "Water reward time", "Reward pin", Gain) => #6
    #5, #6 -> GroupWorkflow Outputs
        ExternalizedMapping(Value(DisplayName=PortName))
        -> PropertySource<Bonsai.Arduino.DigitalOutput,System.String>(MemberName=PortName, Value=COM9) => #1
        -> PropertyMapping(PortName) => #2
        SubscribeSubject Aluminum
        -> BooleanProperty(Value=true) => #4
        SubscribeSubject Attenuated
        -> BooleanProperty(Value=true) => #6
        SubscribeSubject "No Object"
        -> BooleanProperty(Value=true) => #8
        SubscribeSubject "Move catch"
        -> BooleanProperty(Value=true) => #10
        ExternalizedMapping("Arduino pin"(DisplayName="Aluminum pin")) => #11
        #2, #4, #11 -> GroupWorkflow Aluminum
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, "Arduino pin") => #1
            #0, #1 -> GroupWorkflow Control
                WorkflowInput Source1
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=PortName))
                -> PropertySource<Bonsai.Arduino.DigitalOutput,System.String>(MemberName=PortName, Value=COM9) => #3
                -> PropertyMapping(PortName) => #4
                #3 -> PropertyMapping(PortName) => #5
                ExternalizedMapping(Value(DisplayName="Arduino pin"))
                -> IntProperty(Value=14) => #7
                -> PropertyMapping(Value)
                -> IntProperty(Value=14)
                -> PropertyMapping(Pin) => #10
                #7 -> PropertyMapping(Value)
                -> IntProperty(Value=14)
                -> PropertyMapping(Pin) => #13
                #1, #5, #13 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=14)
                -> Delay(DueTime=PT0.52S)
                -> BooleanProperty(Value=false) => #16
                #16, #4, #10 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=14)
                -> WorkflowOutput
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #13
        ExternalizedMapping("Arduino pin"(DisplayName="Attenuated pin")) => #14
        #13, #6, #14 -> GroupWorkflow Attanuated
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, "Arduino pin") => #1
            #0, #1 -> GroupWorkflow Control
                WorkflowInput Source1
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=PortName))
                -> PropertySource<Bonsai.Arduino.DigitalOutput,System.String>(MemberName=PortName, Value=COM9) => #3
                -> PropertyMapping(PortName) => #4
                #3 -> PropertyMapping(PortName) => #5
                ExternalizedMapping(Value(DisplayName="Arduino pin"))
                -> IntProperty(Value=5) => #7
                -> PropertyMapping(Value)
                -> IntProperty(Value=5)
                -> PropertyMapping(Pin) => #10
                #7 -> PropertyMapping(Value)
                -> IntProperty(Value=5)
                -> PropertyMapping(Pin) => #13
                #1, #5, #13 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=5)
                -> Delay(DueTime=PT0.52S)
                -> BooleanProperty(Value=false) => #16
                #16, #4, #10 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=5)
                -> WorkflowOutput
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #16
        ExternalizedMapping("Arduino pin"(DisplayName="No object pin")) => #17
        #16, #8, #17 -> GroupWorkflow "No object"
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, "Arduino pin") => #1
            #0, #1 -> GroupWorkflow Control
                WorkflowInput Source1
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=PortName))
                -> PropertySource<Bonsai.Arduino.DigitalOutput,System.String>(MemberName=PortName, Value=COM9) => #3
                -> PropertyMapping(PortName) => #4
                #3 -> PropertyMapping(PortName) => #5
                ExternalizedMapping(Value(DisplayName="Arduino pin"))
                -> IntProperty(Value=6) => #7
                -> PropertyMapping(Value)
                -> IntProperty(Value=6)
                -> PropertyMapping(Pin) => #10
                #7 -> PropertyMapping(Value)
                -> IntProperty(Value=6)
                -> PropertyMapping(Pin) => #13
                #1, #5, #13 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=6)
                -> Delay(DueTime=PT0.52S)
                -> BooleanProperty(Value=false) => #16
                #16, #4, #10 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=6)
                -> WorkflowOutput
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #19
        ExternalizedMapping("Arduino pin"(DisplayName="Motor pin")) => #20
        #19, #20 -> GroupWorkflow "Motor move"
            ExternalizedMapping(PortName, "Arduino pin") => #0
            SubscribeSubject "Move motor"
            -> StringProperty(Value=f)
            -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n) => #3
            #0, #3 -> Disable GroupWorkflow Control
                WorkflowInput Source1
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=PortName))
                -> PropertySource<Bonsai.Arduino.DigitalOutput,System.String>(MemberName=PortName, Value=COM9) => #3
                -> PropertyMapping(PortName) => #4
                #3 -> PropertyMapping(PortName) => #5
                ExternalizedMapping(Value(DisplayName="Arduino pin"))
                -> IntProperty(Value=8) => #7
                -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> PropertyMapping(Pin) => #10
                #7 -> PropertyMapping(Value)
                -> IntProperty(Value=8)
                -> PropertyMapping(Pin) => #13
                #1, #5, #13 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=8)
                -> Delay(DueTime=PT0.52S)
                -> BooleanProperty(Value=false) => #16
                #16, #4, #10 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=8)
                -> WorkflowOutput
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #22
        ExternalizedMapping("Arduino pin"(DisplayName="Catch pin")) => #23
        #22, #10, #23 -> GroupWorkflow "Catch trial"
            WorkflowInput Source1 => #0
            ExternalizedMapping(PortName, "Arduino pin") => #1
            #0, #1 -> GroupWorkflow Control
                WorkflowInput Source1
                -> BooleanProperty(Value=true) => #1
                ExternalizedMapping(Value(DisplayName=PortName))
                -> PropertySource<Bonsai.Arduino.DigitalOutput,System.String>(MemberName=PortName, Value=COM9) => #3
                -> PropertyMapping(PortName) => #4
                #3 -> PropertyMapping(PortName) => #5
                ExternalizedMapping(Value(DisplayName="Arduino pin"))
                -> IntProperty(Value=7) => #7
                -> PropertyMapping(Value)
                -> IntProperty(Value=7)
                -> PropertyMapping(Pin) => #10
                #7 -> PropertyMapping(Value)
                -> IntProperty(Value=7)
                -> PropertyMapping(Pin) => #13
                #1, #5, #13 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=7)
                -> Delay(DueTime=PT0.52S)
                -> BooleanProperty(Value=false) => #16
                #16, #4, #10 -> Bonsai.Arduino.DigitalOutput(PortName=COM9, Pin=7)
                -> WorkflowOutput
            -> WorkflowOutput
        #1 -> PropertyMapping(PortName) => #25
        ExternalizedMapping(DueTime(DisplayName="Water reward time"), Value(DisplayName="Reward pin")) => #26
        #25, #26 -> GroupWorkflow "Water reward"
            SubscribeSubject "give water" => #0
            ExternalizedMapping(PortName, DueTime, Value) => #1
            #0, #1 -> IncludeWorkflow(Path="Extensions\Output control with timing.bonsai", PortName=COM9, DueTime=PT0.06S, Value=13)
            -> WorkflowOutput

        StringProperty(Value=s)
        -> BehaviorSubject "White noise Start"

        StringProperty(Value=h)
        -> BehaviorSubject "White noise End"

        ExternalizedMapping(Gain)
        -> GroupWorkflow "White noise"
            DoubleProperty(Value=1) => #0
            ExternalizedMapping(Value(DisplayName=Gain)) => #1
            #0, #1 -> Multiply(Operand=DoubleProperty(Value=1.2)) => #2
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> PropertyMapping(RangeMin) => #4
            #2 -> PropertyMapping(RangeMax) => #5
            SubscribeSubject "White noise End"
            -> Skip(Count=1) => #7
            SubscribeSubject "White noise Start"
            -> Skip(Count=1)
            -> Bonsai.Numerics.CreateRandom(Seed=nil)
            -> Bonsai.Numerics.Distributions.CreateNormal(Mean=0, StdDev=1)
            -> Bonsai.Numerics.Distributions.SampleArray(Count=1000000)
            -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=nil, Channels=nil)
            -> Bonsai.Dsp.Rescale(Min=-3.5, Max=3.5, RangeMin=-1, RangeMax=1, RescaleType=Linear) => #14
            #14, #4, #5 -> Bonsai.Dsp.Rescale(Min=-1, Max=1, RangeMin=-1.2, RangeMax=1.2, RescaleType=Linear)
            -> Bonsai.DAQmx.AnalogOutput => #16
              SignalSource=""
              SampleRate=250000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=10000
              Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ao0, VoltageUnits=Volts))
            #16, #7 -> TakeUntil
            -> Repeat

        SubscribeSubject ResetMotor
        -> StringProperty(Value=b)
        -> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)

Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false)
-> Sink "Events notification"
    WorkflowInput Source1
    -> StringProperty(Value="Experiment paused")
    -> MulticastSubject "User notifications"
    -> Sink "2nd notification"
        WorkflowInput Source1
        -> Delay(DueTime=PT1S)
        -> StringProperty(Value="Changed settings")
        -> MulticastSubject "User notifications"
        -> Sink
            WorkflowInput Source1 => #0
            -> Delay(DueTime=PT0.5S)
            -> StringProperty(Value="Level: ") => #2
            SubscribeSubject Level => #3
            #3, #0 -> Sample
            -> Bonsai.Scripting.IronPython.PythonTransform => #5
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            SubscribeSubject Difficulty => #6
            #6, #0 -> Sample
            -> Bonsai.Scripting.IronPython.PythonTransform => #8
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            #0 -> StringProperty(Value="  Difficulty: ") => #9
            #0 -> StringProperty(Value=" P2I: ") => #10
            SubscribeSubject P2I => #11
            #11, #0 -> Sample
            -> Bonsai.Scripting.IronPython.PythonTransform => #13
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value=" T_reward: ") => #14
            SubscribeSubject "reward time" => #15
            #15, #0 -> Sample
            -> Bonsai.Scripting.IronPython.PythonTransform => #17
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value=" ITI: ") => #18
            SubscribeSubject "Time between"
            -> Divide(Operand=DoubleProperty(Value=10000000)) => #20
            #20, #0 -> Sample
            -> Bonsai.Scripting.IronPython.PythonTransform => #22
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            #2, #5, #9, #8, #10, #13, #14, #17, #18, #22 -> Zip
            -> Add
            -> MulticastSubject "User notifications"
            -> Sink
                WorkflowInput Source1
                -> Delay(DueTime=PT0.5S)
                -> StringProperty(Value="press F12 to start")
                -> MulticastSubject "User notifications"
                -> WorkflowOutput
            -> WorkflowOutput
        -> WorkflowOutput
    -> WorkflowOutput

GroupWorkflow Save
    GroupWorkflow "Save to file" => #0
        SubscribeSubject path => #0
        SubscribeSubject Events
        -> Timestamp
        -> MemberSelector => #3
          Selector: Value,Timestamp.DateTime,Timestamp.Day,Timestamp.Month,Timestamp.Year,Timestamp.TimeOfDay.Hours,Timestamp.TimeOfDay.Minutes,Timestamp.TimeOfDay.Seconds,Timestamp.TimeOfDay.Milliseconds,Timestamp.Ticks
        SubscribeSubject Level => #4
        SubscribeSubject Difficulty => #5
        SubscribeSubject "Time between"
        -> Divide(Operand=DoubleProperty(Value=10000000)) => #7
        SubscribeSubject P2I => #8
        SubscribeSubject "reward time" => #9
        #9, #8, #7, #5, #4 -> Zip
        -> BehaviorSubject "settings new" => #11
        #3, #11 -> WithLatestFrom => #12
        StringProperty(Value=events.csv) => #13
        #0, #13 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #16
        SubscribeSubject "water amount" => #17
        DoubleProperty(Value=0) => #18
        #17, #18 -> Merge => #19
        #12, #19 -> WithLatestFrom
        -> BehaviorSubject lastSettings => #21
        #16, #21 -> Bonsai.IO.CsvWriter
          FileName="E:\Ben\Omer training\F107_test_1\events.csv"
          Delimiter=","
          ListSeparator=""
          Append=true
          Overwrite=false
          Suffix=None
          IncludeHeader=false
        -> WorkflowOutput

        SubscribeSubject "settings new"
        -> DistinctUntilChanged
        -> SelectMany
            WorkflowInput Source1 => #0
            SubscribeSubject "Settings filename"
            -> PropertyMapping(FileName) => #2
            #0, #2 -> Bonsai.IO.CsvWriter
              FileName="E:\Ben\Omer training\F107_test_1\Settings.csv"
              Delimiter=","
              ListSeparator=""
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=false
            -> WorkflowOutput

        SubscribeSubject path => #27
        StringProperty(Value=Settings.csv) => #28
        #27, #28 -> Zip
        -> Add
        -> ReplaySubject "Settings filename"(BufferSize=nil)

        SubscribeSubject "lick report"
        -> Timestamp
        -> MemberSelector => #34
          Selector: Value,Timestamp.DateTime,Timestamp.Day,Timestamp.Month,Timestamp.Year,Timestamp.TimeOfDay.Hours,Timestamp.TimeOfDay.Minutes,Timestamp.TimeOfDay.Seconds,Timestamp.TimeOfDay.Milliseconds,Timestamp.Ticks
        SubscribeSubject path => #35
        StringProperty(Value=licks.csv) => #36
        #35, #36 -> Zip
        -> Add
        -> PropertyMapping(FileName) => #39
        #39, #34 -> Bonsai.IO.CsvWriter(FileName="E:\Ben\Omer training\F107_test_1\licks.csv", Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

        GroupWorkflow Videos
            SubscribeSubject path => #0
            -> GroupWorkflow => #1
                WorkflowInput Source1
                -> Timestamp => #1
                -> MemberSelector(Selector=Timestamp.Day)
                -> Bonsai.Scripting.IronPython.PythonTransform => #3
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.Month)
                -> Bonsai.Scripting.IronPython.PythonTransform => #5
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.Year)
                -> Bonsai.Scripting.IronPython.PythonTransform => #7
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.DateTime)
                -> MemberSelector(Selector=TimeOfDay) => #9
                -> MemberSelector(Selector=Hours)
                -> Bonsai.Scripting.IronPython.PythonTransform => #11
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #9 -> MemberSelector(Selector=Minutes)
                -> Bonsai.Scripting.IronPython.PythonTransform => #13
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                StringProperty(Value=_) => #14
                StringProperty(Value=_) => #15
                StringProperty(Value=_) => #16
                StringProperty(Value=_) => #17
                #3, #14, #5, #15, #7, #16, #11, #17, #13 -> Zip
                -> Add
                -> WorkflowOutput
            StringProperty(Value=\Videos\) => #2
            SubscribeSubject Animal => #3
            StringProperty(Value=\) => #4
            SubscribeSubject "Session number"
            -> Bonsai.Scripting.IronPython.PythonTransform => #6
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value=session_) => #7
            StringProperty(Value=\) => #8
            StringProperty(Value=_.avi) => #9
            Source1=#0, Source2=#2, Source3=#1, Source4=#4, Source5=#7, Source6=#6, Source7=#8, Source8=#3, Source10=#9 -> CombineLatest
            -> Add
            -> BehaviorSubject videoPath

            Bonsai.Windows.Input.KeyDown(Filter=F12, SuppressRepetitions=false) => #13
            -> IntProperty(Value=1)
            -> Accumulate
            -> BehaviorSubject "Session number"
            #13 -> SelectMany => #17
                SubscribeSubject videoPath
                -> PropertyMapping(FileName) => #1
                SubscribeSubject "Camera monitor" => #2
                SubscribeSubject fps
                -> PropertyMapping(FrameRate) => #4
                #1, #2, #4 -> Bonsai.Vision.VideoWriter => #5
                  FileName="E:\Ben\Omer training\F107_test_1\\Videos\28_5_2023_13_6\session_1\F107_test_1_.avi"
                  Suffix=FileCount
                  Buffered=true
                  Overwrite=false
                  FourCC=mjpg
                  FrameRate=200
                  FrameSize(Width=0, Height=0)
                  ResizeInterpolation=NearestNeighbor
                SubscribeSubject "startT " => #6
                SubscribeSubject "End trail" => #7
                #5, #7 -> TakeUntil => #8
                #8, #6 -> SubscribeWhen
                -> Repeat
                -> WorkflowOutput
            Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #18
            #17, #18 -> TakeUntil
            -> Repeat

        GroupWorkflow Sound_files
            SubscribeSubject path => #0
            -> GroupWorkflow => #1
                WorkflowInput Source1
                -> Timestamp => #1
                -> MemberSelector(Selector=Timestamp.Day)
                -> Bonsai.Scripting.IronPython.PythonTransform => #3
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.Month)
                -> Bonsai.Scripting.IronPython.PythonTransform => #5
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.Year)
                -> Bonsai.Scripting.IronPython.PythonTransform => #7
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.DateTime)
                -> MemberSelector(Selector=TimeOfDay) => #9
                -> MemberSelector(Selector=Hours)
                -> Bonsai.Scripting.IronPython.PythonTransform => #11
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #9 -> MemberSelector(Selector=Minutes)
                -> Bonsai.Scripting.IronPython.PythonTransform => #13
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                StringProperty(Value=_) => #14
                StringProperty(Value=_) => #15
                StringProperty(Value=_) => #16
                StringProperty(Value=_) => #17
                #3, #14, #5, #15, #7, #16, #11, #17, #13 -> Zip
                -> Add
                -> WorkflowOutput
            StringProperty(Value=\Analogs\) => #2
            SubscribeSubject Animal => #3
            StringProperty(Value=\Sound\) => #4
            SubscribeSubject "Session number"
            -> Bonsai.Scripting.IronPython.PythonTransform => #6
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value=session_) => #7
            StringProperty(Value=\) => #8
            StringProperty(Value=_.bin) => #9
            Source1=#0, Source2=#2, Source3=#1, Source4=#4, Source5=#7, Source6=#6, Source7=#8, Source8=#3, Source10=#9 -> CombineLatest
            -> Add
            -> BehaviorSubject audPath

            Bonsai.Windows.Input.KeyDown(Filter=F12, SuppressRepetitions=false)
            -> SelectMany => #14
                SubscribeSubject audPath
                -> PropertyMapping(Path) => #1
                SubscribeSubject "startT " => #2
                SubscribeSubject "End trail" => #3
                SubscribeSubject "Sound monitor" => #4
                #1, #4 -> Bonsai.Dsp.MatrixWriter => #5
                  Path="E:\Ben\Omer training\F107_test_1\\Analogs\28_5_2023_13_6\Sound\session_1\F107_test_1_.bin"
                  Suffix=FileCount
                  Overwrite=false
                  Layout=ColumnMajor
                #5, #3 -> TakeUntil => #6
                #6, #2 -> SubscribeWhen
                -> Repeat
                -> WorkflowOutput
            Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #15
            #14, #15 -> TakeUntil
            -> Repeat

        GroupWorkflow "Running Files"
            SubscribeSubject path => #0
            -> GroupWorkflow => #1
                WorkflowInput Source1
                -> Timestamp => #1
                -> MemberSelector(Selector=Timestamp.Day)
                -> Bonsai.Scripting.IronPython.PythonTransform => #3
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.Month)
                -> Bonsai.Scripting.IronPython.PythonTransform => #5
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.Year)
                -> Bonsai.Scripting.IronPython.PythonTransform => #7
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #1 -> MemberSelector(Selector=Timestamp.DateTime)
                -> MemberSelector(Selector=TimeOfDay) => #9
                -> MemberSelector(Selector=Hours)
                -> Bonsai.Scripting.IronPython.PythonTransform => #11
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                #9 -> MemberSelector(Selector=Minutes)
                -> Bonsai.Scripting.IronPython.PythonTransform => #13
                  Script:
                    @returns(str)
                    def process(value):
                      x = str(value)
                      return x
                StringProperty(Value=_) => #14
                StringProperty(Value=_) => #15
                StringProperty(Value=_) => #16
                StringProperty(Value=_) => #17
                #3, #14, #5, #15, #7, #16, #11, #17, #13 -> Zip
                -> Add
                -> WorkflowOutput
            StringProperty(Value=\Analogs\) => #2
            SubscribeSubject Animal => #3
            StringProperty(Value=\Encoder\) => #4
            SubscribeSubject "Session number"
            -> Bonsai.Scripting.IronPython.PythonTransform => #6
              Script:
                @returns(str)
                def process(value):
                  x = str(value)
                  return x
            StringProperty(Value=session_) => #7
            StringProperty(Value=\) => #8
            StringProperty(Value=_.bin) => #9
            Source1=#0, Source2=#2, Source3=#1, Source4=#4, Source5=#7, Source6=#6, Source7=#8, Source8=#3, Source10=#9 -> CombineLatest
            -> Add
            -> BehaviorSubject RunningPath

            Bonsai.Windows.Input.KeyDown(Filter=F12, SuppressRepetitions=false)
            -> SelectMany => #14
                SubscribeSubject "startT " => #0
                SubscribeSubject "End trail" => #1
                SubscribeSubject "Running monitor" => #2
                SubscribeSubject RunningPath
                -> PropertyMapping(Path) => #4
                #4, #2 -> Bonsai.Dsp.MatrixWriter(Path="E:\Ben\Omer training\F107_test_1\\Analogs\28_5_2023_13_6\Encoder\session_1\F107_test_1_.bin", Suffix=FileCount, Overwrite=false, Layout=RowMajor) => #5
                #5, #1 -> TakeUntil => #6
                #6, #0 -> SubscribeWhen
                -> Repeat
                -> WorkflowOutput
            Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #15
            #14, #15 -> TakeUntil
            -> Repeat
    SubscribeSubject params
    -> Delay(DueTime=PT5S)
    -> BooleanProperty(Value=false) => #3
    SubscribeSubject init
    -> BooleanProperty(Value=false) => #5
    #3, #5 -> Merge => #6
    #0, #6 -> SubscribeWhen
    -> WorkflowOutput

ExternalizedMapping
  "Start session"
  Count(DisplayName=BufferCount)
  "Count Aluminum"
  "Count Non"
  "White noise"
  "White Noise %"
  "Catch trial"
  "Catch T %"(DisplayName="Catch trial %")
-> GroupWorkflow "Main training"
    SubscribeSubject Level => #0
    ExternalizedMapping(Filter(DisplayName="Start session"))
    -> Bonsai.Windows.Input.KeyDown(Filter=F12, SuppressRepetitions=false) => #2
    -> SelectMany => #3
        WorkflowInput Source1
        -> StringProperty(Value="Starting session animal ") => #1
        SubscribeSubject Animal => #2
        #1, #2 -> Zip
        -> Add
        -> MulticastSubject "User notifications"
        -> WorkflowOutput
    #0, #3 -> Sample => #4
    -> Equal(Operand=IntProperty(Value=0))
    -> GroupWorkflow "Level 0 - Lick"
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany "Level 0 loop"
            ImmediateScheduler
            -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
            SubscribeSubject P2I
            -> PropertyMapping(P) => #3
            #1, #3 -> Bonsai.Numerics.Distributions.CreateBinomial(P=1, N=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> MulticastSubject "startT "
            -> Equal(Operand=IntProperty(Value=1)) => #7
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="100 - Trial: Reward always")
            -> MulticastSubject stimOn
            -> MulticastSubject Events
            -> Delay(DueTime=PT2S) => #12
            SubscribeSubject "reward time"
            -> Multiply(Operand=DoubleProperty(Value=10000000)) => #14
            -> PropertyMapping(DueTime) => #15
            #14 -> PropertyMapping(DueTime) => #16
            #12, #16 -> SelectMany => #17
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject "give water"
                -> StringProperty(Value="055 - Water no lick")
                -> MulticastSubject Events => #4
                ExternalizedMapping(DueTime) => #5
                #4, #5 -> Delay(DueTime=PT3S)
                -> WorkflowOutput
            #7 -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> StringProperty(Value="102 - Trial: Reward for lick")
            -> MulticastSubject stimOn
            -> MulticastSubject Events => #21
            #21, #15 -> SelectMany => #22
                ExternalizedMapping(DueTime)
                -> Timer(DueTime=PT3S, Period=PT0S)
                -> StringProperty(Value="000 - Miss")
                -> MulticastSubject Miss
                -> MulticastSubject Events => #4
                SubscribeSubject licked
                -> Take(Count=1)
                -> MulticastSubject "give water"
                -> StringProperty(Value="001 - Hit")
                -> MulticastSubject Hit
                -> MulticastSubject Events => #10
                #4, #10 -> Amb
                -> WorkflowOutput
            #17, #22 -> Merge => #23
            SubscribeSubject "Time between"
            -> PropertyMapping(DueTime) => #25
            #23, #25 -> Delay(DueTime=PT5S)
            -> Repeat
            -> MulticastSubject "End trail"
            -> MulticastSubject TotalHit => #29
            Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #30
            #29, #30 -> TakeUntil
    #4 -> Disable Equal(Operand=IntProperty(Value=1))
    -> Disable GroupWorkflow "Level 1 - Motor"
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany "Level 1 loop"
            ImmediateScheduler
            -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
            SubscribeSubject Difficulty
            -> PropertyMapping(P) => #3
            #1, #3 -> Bonsai.Numerics.Distributions.CreateBinomial(P=1, N=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> MulticastSubject "startT "
            -> SelectMany "Move motor fwd"
                WorkflowInput Source1 => #0
                SubscribeSubject "Motor Report"
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> StringProperty(Value="600 - Motor at whisker")
                -> MulticastSubject Events => #5
                #0, #5 -> Sample
                -> WorkflowOutput
                #0 -> BooleanProperty(Value=false)
                -> MulticastSubject "Move motor"
                -> StringProperty(Value="066 - Motor fwd")
                -> MulticastSubject Events
            -> Delay(DueTime=PT1S)
            -> Equal(Operand=IntProperty(Value=1)) => #9
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="111 - Trial: Reward always")
            -> MulticastSubject Events
            -> Delay(DueTime=PT1S) => #13
            SubscribeSubject "reward time"
            -> Multiply(Operand=DoubleProperty(Value=10000000)) => #15
            -> PropertyMapping(DueTime) => #16
            #15 -> PropertyMapping(DueTime) => #17
            #13, #17 -> SelectMany => #18
                WorkflowInput Source1
                -> BooleanProperty(Value=false)
                -> MulticastSubject "give water"
                -> StringProperty(Value="010 - Water no lick")
                -> MulticastSubject Events => #4
                ExternalizedMapping(DueTime) => #5
                #4, #5 -> Delay(DueTime=PT2S)
                -> WorkflowOutput
            #9 -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> StringProperty(Value="111 - Trial: Reward for lick")
            -> MulticastSubject Events => #21
            #21, #16 -> SelectMany => #22
                ExternalizedMapping(DueTime)
                -> Timer(DueTime=PT2S, Period=PT0S)
                -> StringProperty(Value="000 - Miss")
                -> MulticastSubject Miss
                -> MulticastSubject Events => #4
                SubscribeSubject licked
                -> Take(Count=1)
                -> MulticastSubject "give water"
                -> StringProperty(Value="001 - Hit")
                -> MulticastSubject Hit
                -> MulticastSubject Events => #10
                #4, #10 -> Amb
                -> WorkflowOutput
            #18, #22 -> Merge
            -> Delay(DueTime=PT0.5S)
            -> MulticastSubject TotalHit
            -> SelectMany "Move motor fwd" => #26
                WorkflowInput Source1 => #0
                SubscribeSubject "Motor Report"
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> StringProperty(Value="400 - Motor at start")
                -> MulticastSubject Events => #5
                #0, #5 -> Sample
                -> WorkflowOutput
                #0 -> BooleanProperty(Value=false)
                -> MulticastSubject "Move motor"
                -> StringProperty(Value="044 - Motor bck")
                -> MulticastSubject Events
            SubscribeSubject "Time between"
            -> PropertyMapping(DueTime) => #28
            #26, #28 -> Delay(DueTime=PT5S)
            -> Repeat
            -> MulticastSubject "End trail" => #31
            Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #32
            #31, #32 -> TakeUntil
    #4 -> Equal(Operand=IntProperty(Value=1)) => #9
    #2 -> StringProperty(Value="777 - Start session")
    -> MulticastSubject Events
    ExternalizedMapping(Value(DisplayName="White noise"))
    -> BooleanProperty(Value=true) => #13
    -> PropertyMapping("White noise") => #14
    #13 -> PropertyMapping("White noise") => #15
    ExternalizedMapping(Value(DisplayName="White Noise %"))
    -> DoubleProperty(Value=0.4) => #17
    -> PropertyMapping(Value) => #18
    #9, #14, #18 -> GroupWorkflow "Level 1 - Object"
        WorkflowInput Source1
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping("White noise", Value) => #2
        #1, #2 -> SelectMany "Level 1 loop"
            ImmediateScheduler => #0
            SubscribeSubject Difficulty
            -> PropertyMapping(P) => #2
            SubscribeSubject "Time between"
            -> Add(Operand=DoubleProperty(Value=0))
            -> PropertyMapping(DueTime) => #5
            Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #6
            SubscribeSubject P2I
            -> PropertyMapping(P) => #8
            ExternalizedMapping(Value(DisplayName="White noise"))
            -> BooleanProperty(Value=true) => #10
            -> Condition => #11
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(Value) => #12
            #11, #12 -> DoubleProperty(Value=0.4) => #13
            #10 -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> DoubleProperty(Value=0) => #15
            #13, #15 -> Amb
            -> PropertyMapping(P) => #17
            #0, #17 -> Sink
                WorkflowInput Source1
                -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
                ExternalizedMapping(P) => #2
                #1, #2 -> Bonsai.Numerics.Distributions.CreateBinomial(P=0.2, N=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Equal(Operand=IntProperty(Value=1)) => #5
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> StringProperty(Value="444 - white noise trial")
                -> MulticastSubject "White noise Start" => #8
                #5 -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value="404 - no white noise") => #10
                #8, #10 -> Amb
                -> MulticastSubject Events
                -> WorkflowOutput
            -> Delay(DueTime=PT0S)
            -> SelectMany "Move motor bck"
                WorkflowInput Source1 => #0
                SubscribeSubject "reset report"
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> StringProperty(Value="400 - Motor at start")
                -> MulticastSubject Events => #5
                #0, #5 -> Sample
                -> WorkflowOutput
                #0 -> BooleanProperty(Value=true)
                -> MulticastSubject ResetMotor
                -> StringProperty(Value="044 - Motor bck")
                -> MulticastSubject Events
            -> Bonsai.Numerics.CreateRandom(Seed=nil) => #21
            #21, #2 -> Bonsai.Numerics.Distributions.CreateBinomial(P=0.6, N=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> MulticastSubject "startT "
            -> Equal(Operand=IntProperty(Value=1)) => #25
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="110 - Trial: Aluminum")
            -> MulticastSubject Events
            -> GroupWorkflow Motors
                WorkflowInput Source1
                -> SelectMany "spin to Aluminum"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Report aluminum"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="010 - At aluminum")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject Aluminum
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "move motor fwd"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Motor Report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="600 - Motor at whisker")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "Move motor"
                    -> StringProperty(Value="066 - Motor fwd")
                    -> MulticastSubject Events
                -> WorkflowOutput
            -> MulticastSubject stimOn => #30
            #30, #8 -> GroupWorkflow "Pav to Inst" => #31
              Description:
                Teach behavior in pavlovian manner (give water always when aluminum is presented.
                Gradually by changing the peobability you can make the behavior instrumental (give water after lick report).
              Workflow
                SubscribeSubject "reward time"
                -> Multiply(Operand=DoubleProperty(Value=10000000)) => #1
                -> PropertyMapping(DueTime) => #2
                #1 -> PropertyMapping(DueTime) => #3
                WorkflowInput Source1
                -> Bonsai.Numerics.CreateRandom(Seed=nil) => #5
                ExternalizedMapping(P) => #6
                #5, #6 -> Bonsai.Numerics.Distributions.CreateBinomial(P=0.15, N=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Equal(Operand=IntProperty(Value=1)) => #9
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value="112 - Trial: Reward for lick")
                -> MulticastSubject Events
                -> MulticastSubject TotalHit => #13
                #9 -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> StringProperty(Value="111 - Trial: Reward always")
                -> MulticastSubject Events => #16
                #16, #3 -> SelectMany
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> Delay(DueTime=PT0.75S)
                    -> MulticastSubject "give water"
                    -> StringProperty(Value="055 - Water no lick")
                    -> MulticastSubject Events => #5
                    ExternalizedMapping(DueTime) => #6
                    #5, #6 -> Delay(DueTime=PT3S)
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #19
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #1 -> Add(Operand=DoubleProperty(Value=5000000))
                -> PropertyMapping(Interval) => #21
                #13, #2, #21 -> SelectMany
                    ExternalizedMapping(DueTime)
                    -> Timer(DueTime=PT3S, Period=PT0S)
                    -> StringProperty(Value="000 - Miss")
                    -> MulticastSubject Miss
                    -> MulticastSubject Events => #4
                    SubscribeSubject licked
                    -> Take(Count=1)
                    -> MulticastSubject "give water"
                    -> StringProperty(Value="001 - Hit")
                    -> MulticastSubject Hit
                    -> MulticastSubject Events => #10
                    #4, #10 -> Amb => #11
                    ExternalizedMapping(Interval) => #12
                    #11, #12 -> SampleInterval(Interval=PT3.5S)
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #24
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #24, #19 -> Merge
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #25 -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> StringProperty(Value="130 - Trial: No object")
            -> MulticastSubject Events
            -> GroupWorkflow "motors F"
                WorkflowInput Source1
                -> SelectMany "spin to no object"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Report non"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="030 - At no object")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "No Object"
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "move motor fwd"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Motor Report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="600 - Motor at whisker")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "Move motor"
                    -> StringProperty(Value="066 - Motor fwd")
                    -> MulticastSubject Events
                -> WorkflowOutput
            -> MulticastSubject stimOn => #36
            DoubleProperty(Value=0)
            -> PropertyMapping(P) => #38
            #36, #38 -> GroupWorkflow "Pav to Inst" => #39
                SubscribeSubject "reward time"
                -> Multiply(Operand=DoubleProperty(Value=10000000))
                -> PropertyMapping(DueTime) => #2
                WorkflowInput Source1
                -> Bonsai.Numerics.CreateRandom(Seed=nil) => #4
                ExternalizedMapping(P) => #5
                #4, #5 -> Bonsai.Numerics.Distributions.CreateBinomial(P=0, N=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Equal(Operand=IntProperty(Value=1)) => #8
                -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value="132 - Trial: CR for no lick")
                -> MulticastSubject Events
                -> StringProperty(Value=total)
                -> MulticastSubject TotalFA => #13
                #13, #2 -> SelectMany => #14
                    ExternalizedMapping(DueTime)
                    -> Timer(DueTime=PT3S, Period=PT0S)
                    -> StringProperty(Value="002 - Correct rejection")
                    -> MulticastSubject CR
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=true) => #5
                    SubscribeSubject licked
                    -> Take(Count=1)
                    -> StringProperty(Value="003 - False alarm")
                    -> MulticastSubject FA
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=false) => #11
                    #5, #11 -> Amb
                    -> WorkflowOutput
                -> Condition CR
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #18
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #14 -> Condition "False alarm"
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #22
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #8 -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> StringProperty(Value="131 - Trial: No reward")
                -> MulticastSubject Events
                -> SelectMany
                    WorkflowInput Source1
                    -> StringProperty(Value="050 - No water")
                    -> MulticastSubject Events => #2
                    ExternalizedMapping(DueTime) => #3
                    #2, #3 -> Delay(DueTime=PT3S)
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #29
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #18, #22, #29 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #31, #39 -> Merge
            -> StringProperty(Value=endddd)
            -> MulticastSubject "White noise End" => #42
            #42, #5 -> Delay(DueTime=PT10S)
            -> Repeat
            -> MulticastSubject "End trail" => #45
            #45, #6 -> TakeUntil
    #4 -> Equal(Operand=IntProperty(Value=2)) => #20
    #17 -> PropertyMapping(Value) => #21
    ExternalizedMapping("Catch trial", "Catch T %") => #22
    #20, #15, #21, #22 -> GroupWorkflow "Level 3 - test"
        WorkflowInput Source1
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping("White noise", Value, "Catch trial", "Catch T %") => #2
        #1, #2 -> SelectMany "Level 2 loop"
            ImmediateScheduler => #0
            SubscribeSubject "Time between"
            -> Add(Operand=DoubleProperty(Value=0))
            -> PropertyMapping(DueTime) => #3
            Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #4
            ExternalizedMapping(Value(DisplayName="White noise"))
            -> BooleanProperty(Value=true) => #6
            -> Condition => #7
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(Value) => #8
            #7, #8 -> DoubleProperty(Value=0.4) => #9
            #6 -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> DoubleProperty(Value=0) => #11
            #9, #11 -> Amb
            -> PropertyMapping(P) => #13
            #0, #13 -> Sink => #14
                WorkflowInput Source1
                -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
                ExternalizedMapping(P) => #2
                #1, #2 -> Bonsai.Numerics.Distributions.CreateBinomial(P=0.4, N=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> Equal(Operand=IntProperty(Value=1)) => #5
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> StringProperty(Value="444 - white noise trial")
                -> MulticastSubject "White noise Start" => #8
                #5 -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> StringProperty(Value="404 - no white noise") => #10
                #8, #10 -> Amb
                -> MulticastSubject Events
                -> WorkflowOutput
            ExternalizedMapping(Value(DisplayName="Catch trial"))
            -> BooleanProperty(Value=false) => #16
            -> Condition => #17
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(Value(DisplayName="Catch T %")) => #18
            #17, #18 -> DoubleProperty(Value=0.1) => #19
            #16 -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> DoubleProperty(Value=0) => #21
            #19, #21 -> Amb
            -> PropertyMapping(P) => #23
            #14, #23 -> GroupWorkflow
                WorkflowInput Source1
                -> Bonsai.Numerics.CreateRandom(Seed=nil) => #1
                ExternalizedMapping(P) => #2
                #1, #2 -> Bonsai.Numerics.Distributions.CreateBinomial(P=0, N=1)
                -> Bonsai.Numerics.Distributions.Sample
                -> WorkflowOutput
            -> SelectMany "Move motor bck"
                WorkflowInput Source1 => #0
                SubscribeSubject "reset report"
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> StringProperty(Value="400 - Motor at start")
                -> MulticastSubject Events => #5
                #0, #5 -> Sample
                -> WorkflowOutput
                #0 -> BooleanProperty(Value=true)
                -> MulticastSubject ResetMotor
                -> StringProperty(Value="044 - Motor bck")
                -> MulticastSubject Events
            -> Equal(Operand=IntProperty(Value=1)) => #26
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> Delay(DueTime=PT0.5S)
            -> Bonsai.Numerics.CreateRandom(Seed=nil)
            -> Bonsai.Numerics.Distributions.CreateCategorical(ProbabilityMass(double=0.5, double=1, double=0.5))
            -> Bonsai.Numerics.Distributions.Sample
            -> MulticastSubject "startT " => #32
            -> Equal(Operand=IntProperty(Value=1))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="110 - Trial: Aluminum")
            -> MulticastSubject Events
            -> GroupWorkflow Motors
                WorkflowInput Source1
                -> SelectMany "spin to Aluminum"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Report aluminum"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="010 - At aluminum")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject Aluminum
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "move motor fwd"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Motor Report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="600 - Motor at whisker")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "Move motor"
                    -> StringProperty(Value="066 - Motor fwd")
                    -> MulticastSubject Events
                -> WorkflowOutput
            -> MulticastSubject stimOn
            -> GroupWorkflow "Aluminum test" => #39
                SubscribeSubject "reward time"
                -> Multiply(Operand=DoubleProperty(Value=10000000)) => #1
                -> PropertyMapping(DueTime) => #2
                #1 -> Add(Operand=DoubleProperty(Value=5000000))
                -> PropertyMapping(Interval) => #4
                WorkflowInput Source1
                -> StringProperty(Value="112 - Trial: Reward for lick")
                -> MulticastSubject Events
                -> MulticastSubject TotalHit => #8
                #8, #2, #4 -> SelectMany
                    ExternalizedMapping(DueTime)
                    -> Timer(DueTime=PT3S, Period=PT0S)
                    -> StringProperty(Value="000 - Miss")
                    -> MulticastSubject Miss
                    -> MulticastSubject Events => #4
                    SubscribeSubject licked
                    -> Take(Count=1)
                    -> MulticastSubject "give water"
                    -> StringProperty(Value="001 - Hit")
                    -> MulticastSubject Hit
                    -> MulticastSubject Events => #10
                    #4, #10 -> Amb => #11
                    ExternalizedMapping(Interval) => #12
                    #11, #12 -> SampleInterval(Interval=PT3.5S)
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                -> Merge
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #32 -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="130 - Trial: No object")
            -> MulticastSubject Events
            -> GroupWorkflow "motors F"
                WorkflowInput Source1
                -> SelectMany "spin to no object"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Report non"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="030 - At no object")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "No Object"
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "move motor fwd"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Motor Report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="600 - Motor at whisker")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "Move motor"
                    -> StringProperty(Value="066 - Motor fwd")
                    -> MulticastSubject Events
                -> WorkflowOutput
            -> MulticastSubject stimOn
            -> GroupWorkflow "Test no Object" => #46
                SubscribeSubject "reward time"
                -> Multiply(Operand=DoubleProperty(Value=10000000))
                -> PropertyMapping(DueTime) => #2
                WorkflowInput Source1
                -> StringProperty(Value="111 - Trial: CR for no lick")
                -> MulticastSubject Events
                -> StringProperty(Value=total)
                -> MulticastSubject TotalFA => #7
                #7, #2 -> SelectMany => #8
                    ExternalizedMapping(DueTime)
                    -> Timer(DueTime=PT3S, Period=PT0S)
                    -> StringProperty(Value="002 - Correct rejection")
                    -> MulticastSubject CR
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=true) => #5
                    SubscribeSubject licked
                    -> Take(Count=1)
                    -> StringProperty(Value="003 - False alarm")
                    -> MulticastSubject FA
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=false) => #11
                    #5, #11 -> Amb
                    -> WorkflowOutput
                -> Condition CR
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #12
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #8 -> Condition "False alarm"
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #16
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #12, #16 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #32 -> Equal(Operand=IntProperty(Value=2))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="120 - Trial: Attenuated")
            -> MulticastSubject Events
            -> GroupWorkflow "motors F"
                WorkflowInput Source1
                -> SelectMany "spin to attenuated"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Report attenuated"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="030 - At Attenuated")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject Attenuated
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "move motor fwd"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Motor Report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="600 - Motor at whisker")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "Move motor"
                    -> StringProperty(Value="066 - Motor fwd")
                    -> MulticastSubject Events
                -> WorkflowOutput
            -> MulticastSubject stimOn
            -> GroupWorkflow "Test Attenuated" => #53
                SubscribeSubject "reward time"
                -> Multiply(Operand=DoubleProperty(Value=10000000))
                -> PropertyMapping(DueTime) => #2
                WorkflowInput Source1
                -> StringProperty(Value="111 - Trial: CR for no lick")
                -> MulticastSubject Events
                -> StringProperty(Value=total)
                -> MulticastSubject AttTotalFA => #7
                #7, #2 -> SelectMany => #8
                    ExternalizedMapping(DueTime)
                    -> Timer(DueTime=PT3S, Period=PT0S)
                    -> StringProperty(Value="004 - Att Correct rejection")
                    -> MulticastSubject AttCR
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=true) => #5
                    SubscribeSubject licked
                    -> Take(Count=1)
                    -> StringProperty(Value="005 - Att False alarm")
                    -> MulticastSubject AttFA
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=false) => #11
                    #5, #11 -> Amb
                    -> WorkflowOutput
                -> Condition CR
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #12
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #8 -> Condition "False alarm"
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #16
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #12, #16 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #26 -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="555 - Catch trial")
            -> MulticastSubject Events
            -> Delay(DueTime=PT0.5S)
            -> Bonsai.Numerics.CreateRandom(Seed=nil)
            -> Bonsai.Numerics.Distributions.CreateCategorical(ProbabilityMass(double=0.75, double=1, double=0.5))
            -> Bonsai.Numerics.Distributions.Sample
            -> MulticastSubject "startT " => #61
            -> Equal(Operand=IntProperty(Value=1))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="110 - Trial: Aluminum")
            -> MulticastSubject Events
            -> GroupWorkflow Motors
                WorkflowInput Source1
                -> SelectMany "spin to Aluminum"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Report aluminum"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="010 - At aluminum")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject Aluminum
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "move motor fwd"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Catch report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="601 - Motor at catch")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "Move catch"
                    -> StringProperty(Value="066 - Motor fwd")
                    -> MulticastSubject Events
                -> WorkflowOutput
            -> MulticastSubject stimOn
            -> GroupWorkflow "Aluminum test" => #68
                SubscribeSubject "reward time"
                -> Multiply(Operand=DoubleProperty(Value=10000000)) => #1
                -> PropertyMapping(DueTime) => #2
                #1 -> Add(Operand=DoubleProperty(Value=5000000))
                -> PropertyMapping(Interval) => #4
                WorkflowInput Source1
                -> StringProperty(Value="112 - Trial: Reward for lick")
                -> MulticastSubject Events
                -> MulticastSubject TotalHit => #8
                #8, #2, #4 -> SelectMany
                    ExternalizedMapping(DueTime)
                    -> Timer(DueTime=PT3S, Period=PT0S)
                    -> StringProperty(Value="000 - Miss")
                    -> MulticastSubject Miss
                    -> MulticastSubject Events => #4
                    SubscribeSubject licked
                    -> Take(Count=1)
                    -> MulticastSubject "give water"
                    -> StringProperty(Value="001 - Hit")
                    -> MulticastSubject Hit
                    -> MulticastSubject Events => #10
                    #4, #10 -> Amb => #11
                    ExternalizedMapping(Interval) => #12
                    #11, #12 -> SampleInterval(Interval=PT3.5S)
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                -> Merge
                -> BooleanProperty(Value=true)
                -> WorkflowOutput
            #61 -> Equal(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="130 - Trial: No object")
            -> MulticastSubject Events
            -> GroupWorkflow "motors F"
                WorkflowInput Source1
                -> SelectMany "spin to no object"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Report non"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="030 - At no object")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "No Object"
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "move motor fwd"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Catch report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="601 - Motor at catch")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "Move catch"
                    -> StringProperty(Value="066 - Motor fwd")
                    -> MulticastSubject Events
                -> WorkflowOutput
            -> MulticastSubject stimOn
            -> GroupWorkflow "Test no Object" => #75
                SubscribeSubject "reward time"
                -> Multiply(Operand=DoubleProperty(Value=10000000))
                -> PropertyMapping(DueTime) => #2
                WorkflowInput Source1
                -> StringProperty(Value="111 - Trial: CR for no lick")
                -> MulticastSubject Events
                -> StringProperty(Value=total)
                -> MulticastSubject TotalFA => #7
                #7, #2 -> SelectMany => #8
                    ExternalizedMapping(DueTime)
                    -> Timer(DueTime=PT3S, Period=PT0S)
                    -> StringProperty(Value="002 - Correct rejection")
                    -> MulticastSubject CR
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=true) => #5
                    SubscribeSubject licked
                    -> Take(Count=1)
                    -> StringProperty(Value="003 - False alarm")
                    -> MulticastSubject FA
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=false) => #11
                    #5, #11 -> Amb
                    -> WorkflowOutput
                -> Condition CR
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #12
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #8 -> Condition "False alarm"
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #16
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #12, #16 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #61 -> Equal(Operand=IntProperty(Value=2))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value="120 - Trial: Attenuated")
            -> MulticastSubject Events
            -> GroupWorkflow "motors F"
                WorkflowInput Source1
                -> SelectMany "spin to attenuated"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Report attenuated"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="030 - At Attenuated")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject Attenuated
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "move motor fwd"
                    WorkflowInput Source1 => #0
                    SubscribeSubject "Catch report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="601 - Motor at catch")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=false)
                    -> MulticastSubject "Move catch"
                    -> StringProperty(Value="066 - Motor fwd")
                    -> MulticastSubject Events
                -> WorkflowOutput
            -> MulticastSubject stimOn
            -> GroupWorkflow "Test Attenuated" => #82
                SubscribeSubject "reward time"
                -> Multiply(Operand=DoubleProperty(Value=10000000))
                -> PropertyMapping(DueTime) => #2
                WorkflowInput Source1
                -> StringProperty(Value="111 - Trial: CR for no lick")
                -> MulticastSubject Events
                -> StringProperty(Value=total)
                -> MulticastSubject AttTotalFA => #7
                #7, #2 -> SelectMany => #8
                    ExternalizedMapping(DueTime)
                    -> Timer(DueTime=PT3S, Period=PT0S)
                    -> StringProperty(Value="004 - Correct rejection")
                    -> MulticastSubject AttCR
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=true) => #5
                    SubscribeSubject licked
                    -> Take(Count=1)
                    -> StringProperty(Value="005 - False alarm")
                    -> MulticastSubject AttFA
                    -> MulticastSubject Events
                    -> BooleanProperty(Value=false) => #11
                    #5, #11 -> Amb
                    -> WorkflowOutput
                -> Condition CR
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #12
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #8 -> Condition "False alarm"
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Delay(DueTime=PT0.5S)
                -> SelectMany "Move motor bck" => #16
                    WorkflowInput Source1 => #0
                    SubscribeSubject "reset report"
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> StringProperty(Value="400 - Motor at start")
                    -> MulticastSubject Events => #5
                    #0, #5 -> Sample
                    -> WorkflowOutput
                    #0 -> BooleanProperty(Value=true)
                    -> MulticastSubject ResetMotor
                    -> StringProperty(Value="044 - Motor bck")
                    -> MulticastSubject Events
                #12, #16 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            #39, #46, #53, #68, #75, #82 -> Merge
            -> StringProperty(Value=endddd)
            -> MulticastSubject "White noise End" => #85
            #85, #3 -> Delay(DueTime=PT10S)
            -> Repeat
            -> MulticastSubject "End trail" => #88
            #88, #4 -> TakeUntil

    IntProperty(Value=0)
    -> BehaviorSubject "startT "

    StringProperty
    -> PublishSubject "End trail"

    ExternalizedMapping(Count, "Count Aluminum", "Count Non")
    -> GroupWorkflow "Lick report"
        Disable SubscribeSubject "Time between"
        -> Disable Divide(Operand=DoubleProperty(Value=10000000)) => #1
        Disable SubscribeSubject "reward time" => #2
        Disable SubscribeSubject Level
        -> Disable Multiply(Operand=IntProperty(Value=12)) => #4
        #1, #2, #4 -> Disable Zip
        -> Disable Add
        -> Disable Subtract(Operand=DoubleProperty(Value=1))
        -> Disable PublishSubject BufferC

        SubscribeSubject LickReports
        -> Bonsai.Dsp.ConvertToArray(Depth=nil)
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F64, Channels=nil)
        -> PublishSubject lickingOverTime

        Disable SubscribeSubject lickingOverTime
        -> Disable BufferCount(Count=3, Skip=1)
        -> Disable Merge
        -> Disable Bonsai.Dsp.IncrementalMean

        SubscribeSubject "startT "
        -> Equal(Operand=IntProperty(Value=1))
        -> Skip(Count=1) => #19
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject LickingAlum
        #19 -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> PublishSubject LickingNon

        GroupWorkflow "All Trials"
            SubscribeSubject lickingOverTime
            -> BufferCount(Count=10, Skip=1)
            -> Bonsai.Dsp.Concat(Axis=0)
            -> Bonsai.Dsp.Reduce(Axis=0, Operation=Avg)
            -> WorkflowOutput
        -> BehaviorSubject AllGraph => #25
        Bonsai.Windows.Input.KeyDown(Filter=F12, SuppressRepetitions=false) => #26
        #25, #26 -> SubscribeWhen => #27
        SubscribeSubject "startT "
        -> Skip(Count=1)
        -> SelectMany => #30
            SubscribeSubject "lick report" => #0
            -> DoubleProperty(Value=1) => #1
            Timer(DueTime=PT0S, Period=PT0.5S)
            -> DoubleProperty(Value=0) => #3
            #1, #3 -> Merge => #4
            SubscribeSubject stimOn
            -> DoubleProperty(Value=0.5) => #6
            #6, #3 -> Merge => #7
            SubscribeSubject "give water"
            -> DoubleProperty(Value=0.6) => #9
            #9, #3 -> Merge => #10
            #4, #7, #10 -> Zip
            -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector="", ValueSelector="Item1,Item2,Item3", SymbolType=XCross, LineWidth=0, Capacity=nil, Min=0.3, Max=1.1)
            -> MulticastSubject Graph
            #0 -> DoubleProperty(Value=1)
            -> Skip(Count=1) => #15
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> DoubleProperty(Value=0) => #17
            #15, #17 -> Merge
            -> BufferTime(TimeSpan=PT1S)
            -> Bonsai.Dsp.ConvertToArray(Depth=nil)
            -> Add
            -> Repeat
            -> WorkflowOutput
        SubscribeSubject "End trail" => #31
        Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #32
        #27, #32 -> TakeUntil
        -> Repeat
        #32 -> StringProperty(Value=a) => #35
        SubscribeSubject Graph
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector="", ValueSelector="Item1,Item2,Item3", SymbolType=XCross, LineWidth=0, Capacity=nil, Min=0.3, Max=1.1) => #37
        SubscribeSubject "startT " => #38
        #37, #38 -> SubscribeWhen => #39
        SubscribeSubject "End trail" => #40
        #40, #35 -> Merge => #41
        #39, #41 -> TakeUntil
        -> Repeat
        #31, #35 -> Merge => #44
        ExternalizedMapping(Count) => #45
        #30, #45 -> BufferCount(Count=15, Skip=nil) => #46
        #46, #44 -> TakeUntil
        -> BehaviorSubject LickReports
        -> Repeat
        ExternalizedMapping("Count Aluminum")
        -> GroupWorkflow "Aluminum trials"
            SubscribeSubject LickingAlum
            -> SelectMany Alu
                SubscribeSubject lickingOverTime
                -> WorkflowOutput
            -> Take(Count=1)
            -> Repeat => #3
            ExternalizedMapping(Count(DisplayName="Count Aluminum")) => #4
            #3, #4 -> BufferCount(Count=10, Skip=1)
            -> Bonsai.Dsp.Concat(Axis=0)
            -> Bonsai.Dsp.Reduce(Axis=0, Operation=Avg)
            -> WorkflowOutput
        -> BehaviorSubject AlGraph => #52
        #52, #26 -> SubscribeWhen => #53
        #53, #32 -> TakeUntil
        -> Repeat
        ExternalizedMapping("Count Non")
        -> GroupWorkflow "Non trials"
            SubscribeSubject LickingNon
            -> SelectMany Non
                SubscribeSubject lickingOverTime
                -> WorkflowOutput
            -> Take(Count=1)
            -> Repeat => #3
            ExternalizedMapping(Count(DisplayName="Count Non")) => #4
            #3, #4 -> BufferCount(Count=10, Skip=1)
            -> Bonsai.Dsp.Concat(Axis=0)
            -> Bonsai.Dsp.Reduce(Axis=0, Operation=Avg)
            -> WorkflowOutput
        -> BehaviorSubject NonGraph => #58
        #58, #26 -> SubscribeWhen => #59
        #59, #32 -> TakeUntil
        -> Repeat

        DoubleProperty(Value=0) => #62
        DoubleProperty(Value=0) => #63
        DoubleProperty(Value=0) => #64
        #62, #63, #64 -> Zip
        -> PublishSubject Graph

        Bonsai.Design.Visualizers.TableLayoutPanelBuilder Licking
          ColumnCount=2
          RowCount=6
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=3)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=3)
            CellSpan(ColumnSpan=1, RowSpan=2)

    StringProperty
    -> BehaviorSubject stimOn

ExternalizedMapping("Load Animal")
-> GroupWorkflow "Load animal to session"
    ExternalizedMapping(Filter(DisplayName="Load Animal"))
    -> Bonsai.Windows.Input.KeyDown(Filter=F10, SuppressRepetitions=false)
    -> BehaviorSubject loadExp
    -> Delay(DueTime=PT0.5S)
    -> BehaviorSubject "start session"
    -> WorkflowOutput

SubscribeSubject Events
SubscribeSubject "User notifications"

GroupWorkflow "Manual control"
    ExternalizedMapping(Filter(DisplayName="Give water"))
    -> Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift
      SuppressRepetitions=false
    -> BooleanProperty(Value=true)
    -> BehaviorSubject "give water"
    -> StringProperty(Value="090 - water")
    -> MulticastSubject Events

    ExternalizedMapping(Filter(DisplayName="Go to Alum"))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Aluminum

    ExternalizedMapping(Filter(DisplayName="Go to Attenuated"))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Attenuated

    ExternalizedMapping(Filter(DisplayName="Go to no Object"))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 Back LineFeed Clear B D F H J L N Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> BehaviorSubject "No Object"

    ExternalizedMapping(Filter(DisplayName="Move motor"))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 B D F Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> BehaviorSubject "Move motor"

    ExternalizedMapping(Filter(DisplayName="Move catch"))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> BehaviorSubject "Move catch"

    ExternalizedMapping(Filter(DisplayName="Reset motor"))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true)
    -> BehaviorSubject ResetMotor

Bonsai.Windows.Input.KeyDown(Filter=F4, SuppressRepetitions=false) => #15
ExternalizedMapping(Value(DisplayName="Serial command")) => #16
#15, #16 -> StringProperty(Value=3)
-> Bonsai.IO.SerialStringWrite(PortName=COM15, NewLine=\r\n)

GroupWorkflow Camera
    ExternalizedMapping(CaptureProperties, Index)
    -> Bonsai.Vision.CameraCapture(Index=0, CaptureProperties(CapturePropertyAssignment(Property=Fps, Value=200), CapturePropertyAssignment(Property=Settings, Value=0)))
    -> Bonsai.Vision.Crop(RegionOfInterest(X=201, Y=93, Width=350, Height=324))
    -> BehaviorSubject "Camera monitor"
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=Fps))
    -> PropertySource<FpsCameraCapture,System.Double>(MemberName=Fps, Value=200)
    -> BehaviorSubject fps

Bonsai.DAQmx.AnalogInput
  SignalSource=""
  SampleRate=100000
  ActiveEdge=Rising
  SampleMode=ContinuousSamples
  BufferSize=1000
  SamplesPerChannel=nil
  Channels
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ai1, TerminalConfiguration=Nrse, VoltageUnits=Volts)
-> BehaviorSubject "Sound monitor"
-> Bonsai.Dsp.Butterworth(SampleRate=100000, Cutoff1=2000, Cutoff2=0, FilterOrder=3, FilterType=HighPass)

Bonsai.DAQmx.AnalogInput
  SignalSource=""
  SampleRate=10000
  ActiveEdge=Rising
  SampleMode=ContinuousSamples
  BufferSize=1000
  SamplesPerChannel=nil
  Channels
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev2/ai1, TerminalConfiguration=Differential, VoltageUnits=Volts)
-> BehaviorSubject "Running monitor"
-> Bonsai.Dsp.Butterworth(SampleRate=10000, Cutoff1=1, Cutoff2=0, FilterOrder=3, FilterType=HighPass)

ExternalizedMapping(Value(DisplayName="Water per drop"))
-> GroupWorkflow Graphs
    GroupWorkflow "Hit rate CR rate"
        Bonsai.Windows.Input.KeyDown(Filter=F12, SuppressRepetitions=false) => #0
        -> SelectMany => #1
            SubscribeSubject CR
            -> Skip(Count=1)
            -> DoubleProperty(Value=0) => #2
            SubscribeSubject FA
            -> Skip(Count=1)
            -> DoubleProperty(Value=1) => #5
            #2, #5 -> Merge => #6
            -> Accumulate => #7
            SubscribeSubject TotalFA
            -> Skip(Count=1)
            -> DoubleProperty(Value=1)
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1)) => #13
            #7, #13 -> WithLatestFrom
            -> Divide
            -> MulticastSubject "CR Rate"
            #6 -> BufferCount(Count=10, Skip=1)
            -> Bonsai.Dsp.ConvertToArray(Depth=nil)
            -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=nil, Channels=nil)
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0)
            -> MulticastSubject "FA running"

            SubscribeSubject Miss
            -> Skip(Count=1)
            -> DoubleProperty(Value=0) => #25
            SubscribeSubject Hit
            -> Skip(Count=1)
            -> DoubleProperty(Value=1) => #28
            #25, #28 -> Merge => #29
            -> Accumulate => #30
            SubscribeSubject TotalHit
            -> Skip(Count=1)
            -> DoubleProperty(Value=1)
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1)) => #36
            #30, #36 -> WithLatestFrom
            -> Divide
            -> MulticastSubject "Hit Rate"
            #29 -> BufferCount(Count=10, Skip=1)
            -> Bonsai.Dsp.ConvertToArray(Depth=nil)
            -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=nil, Channels=nil)
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0)
            -> MulticastSubject "Hit running"

            SubscribeSubject AttCR
            -> Skip(Count=1)
            -> DoubleProperty(Value=0) => #48
            SubscribeSubject AttFA
            -> Skip(Count=1)
            -> DoubleProperty(Value=1) => #51
            #48, #51 -> Merge => #52
            -> Accumulate => #53
            SubscribeSubject AttTotalFA
            -> Skip(Count=1)
            -> DoubleProperty(Value=1)
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1)) => #59
            #53, #59 -> WithLatestFrom
            -> Divide
            -> MulticastSubject "AttCR Rate"
            #52 -> BufferCount(Count=10, Skip=1)
            -> Bonsai.Dsp.ConvertToArray(Depth=nil)
            -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=nil, Channels=nil)
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0)
            -> MulticastSubject "AttFA running"
        Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false) => #2
        #1, #2 -> TakeUntil
        -> Repeat
        #0 -> StringProperty(Value=Hit)
        -> BehaviorSubject Hit
        #0 -> StringProperty(Value=miss)
        -> BehaviorSubject Miss
        #0 -> StringProperty(Value=FA)
        -> BehaviorSubject FA
        #0 -> StringProperty(Value=CR)
        -> BehaviorSubject CR
        #0 -> StringProperty(Value=totalHit)
        -> BehaviorSubject TotalHit
        #0 -> StringProperty(Value=totalFA)
        -> BehaviorSubject TotalFA
        #0 -> DoubleProperty(Value=0)
        -> BehaviorSubject "Hit Rate"
        #0 -> DoubleProperty(Value=0)
        -> BehaviorSubject "CR Rate"
        #0 -> DoubleProperty(Value=0)
        -> BehaviorSubject "Hit running"
        #0 -> DoubleProperty(Value=0)
        -> BehaviorSubject "FA running"
        #0 -> StringProperty(Value=FA)
        -> BehaviorSubject AttFA
        #0 -> StringProperty(Value=CR)
        -> BehaviorSubject AttCR
        #0 -> StringProperty(Value=totalFA)
        -> BehaviorSubject AttTotalFA
        #0 -> DoubleProperty(Value=0)
        -> BehaviorSubject "AttCR Rate"
        #0 -> DoubleProperty(Value=0)
        -> BehaviorSubject "AttFA running"

    ExternalizedMapping(Value)
    -> GroupWorkflow "Water amount in mL"
        SubscribeSubject "give water" => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> DoubleProperty(Value=0.005)
        -> Accumulate
        -> BehaviorSubject "water amount"
        -> WorkflowOutput

SubscribeSubject "Hit Rate" => #28
SubscribeSubject "CR Rate" => #29
SubscribeSubject "AttCR Rate" => #30
#28, #29, #30 -> CombineLatest
-> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector="", ValueSelector="Item1,Item2,Item3", SymbolType=Square, LineWidth=1, Capacity=nil, Min=nil, Max=nil)

Bonsai.Design.Visualizers.TableLayoutPanelBuilder Hit/FA(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")

SubscribeSubject "water amount"
-> Bonsai.Scripting.IronPython.PythonTransform => #35
  Script:
    @returns(str)
    def process(value):
      x = str(value)
      return x
StringProperty(Value="Total Water: ") => #36
#36, #35 -> CombineLatest
-> Add

SubscribeSubject "Camera monitor"

Bonsai.Design.Visualizers.TableLayoutPanelBuilder "All report"
  ColumnCount=2
  RowCount=16
  ColumnStyles=""
  RowStyles=""
  CellSpans(CellSpan(ColumnSpan=1, RowSpan=10), CellSpan(ColumnSpan=1, RowSpan=16), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=5))

SubscribeSubject Hit
Bonsai.Design.Visualizers.TableLayoutPanelBuilder Analogs(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
SubscribeSubject "lick report"

Disable GroupWorkflow Trigger
    DefaultScheduler
    -> Delay(DueTime=PT0.05S)
    -> IntProperty(Value=5)
    -> Bonsai.DAQmx.AnalogOutput => #3
      SignalSource=""
      SampleRate=1000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))
    SubscribeSubject "startT "
    -> Skip(Count=1) => #5
    #3, #5 -> SubscribeWhen => #6
    SubscribeSubject "End trail" => #7
    #6, #7 -> TakeUntil
    -> Repeat

    SubscribeSubject "End trail" => #10
    DefaultScheduler
    -> IntProperty(Value=0)
    -> Bonsai.DAQmx.AnalogOutput => #13
      SignalSource=""
      SampleRate=1000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))
    #13, #10 -> SubscribeWhen => #14
    SubscribeSubject "startT "
    -> Skip(Count=1) => #16
    #14, #16 -> TakeUntil
    -> Repeat

    IntProperty(Value=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=1000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))

    Bonsai.Windows.Input.KeyDown(Filter=F2, SuppressRepetitions=false)
    -> IntProperty(Value=0)
    -> Bonsai.DAQmx.AnalogOutput
      SignalSource=""
      SampleRate=1000
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev3/ao1, VoltageUnits=Volts))

SubscribeSubject "Hit running" => #45
SubscribeSubject "FA running" => #46
SubscribeSubject "AttFA running" => #47
#45, #46, #47 -> CombineLatest
-> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Item1,Item2,Item3", SymbolType=Square, LineWidth=1, Capacity=nil, Min=nil, Max=nil)

Bonsai.IO.SerialStringRead(PortName=COM15, NewLine=\r\n)
SubscribeSubject "Motor Report"
SubscribeSubject "Motor Report"
SubscribeSubject "Motor Report"
